<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <classname>AcquisitionReader</classname>
            <dll>gadgetron_core_readers</dll>
        </reader>
    </readers>
        
    <stream>
        
        <!--
        <external>
            <connect port="18000"/>
        </external>
        -->

   
        <external>
            <execute name="ep2d_reconstruction_gadget" target="epi_2d_recon" type="python"/>
            <configuration/>
        </external>  
           

    </stream>
    
    <writers>
        <writer>
            <classname>ImageWriter</classname>
            <dll>gadgetron_core_writers</dll>          
        </writer>
    </writers>

</configuration>
